PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome.
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  Routine practice
  Routine array
    PolygonComponent fixA
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent stim1
      durationEstim = 1
      fillColor [set every repeat] = $stim1_color
      lineColor [set every repeat] = $stim1_color
      pos [set every repeat] = [stim1_x,stim1_y]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
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  Routine probe
    PolygonComponent fixB
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    MouseComponent mouse
      clickable = stim1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1
      syncScreenRefresh = True
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    PolygonComponent probe1
      durationEstim = 1
      fillColor [set every repeat] = $probe1_color
      lineColor [set every repeat] = $probe1_color
      pos [set every repeat] = [probe1_x,probe1_y]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('stim1_x', -0.25), ('stim1_y', -0.25), ('stim1_color', 'black'), ('probe1_x', -0.25), ('probe1_y', -0.25), ('probe1_color', 'white'), ('answer', 'probe1')])]
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    Routine array
    Routine probe
  LoopTerminator trials
